CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|/media/hao/Data/2024-04-19_barcode_test
    Name of the file:cp_dataloader.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

FilterObjects:[module_num:2|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
    Select the objects to filter:mask_cp_masks_cell
    Name the output objects:cell
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
ResizeObjects:[module_num:3|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enabled:False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
    Select the input object:mask_cp_masks_cell
    Name the output object:cell
    Method:Match Image
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    Select the image with the desired dimensions:ch1

MeasureImageQuality:[module_num:4|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageIntensity:[module_num:5|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
    Select images to measure:ch2, ch3
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:1,

MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:cell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:ch2, ch3
    Select objects to measure:cell

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:ch2, ch3
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:cell
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:5
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
MeasureGranularity:[module_num:9|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
    Select images to measure:ch2, ch3
    Measure within objects?:Yes
    Select objects to measure:cell
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.1
    Radius of structuring element:6
    Range of the granular spectrum:3

MeasureTexture:[module_num:10|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
    Select images to measure:ch2, ch3
    Select objects to measure:cell
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:2

MeasureColocalization:[module_num:11|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
    Select images to measure:ch2, ch3
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:cell
    Run all metrics?:No
    Calculate correlation and slope metrics?:Yes
    Calculate the Manders coefficients?:Yes
    Calculate the Rank Weighted Colocalization coefficients?:Yes
    Calculate the Overlap coefficients?:No
    Calculate the Manders coefficients using Costes auto threshold?:No
    Method for Costes thresholding:Faster

ExportToDatabase:[module_num:12|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|D:\\Postdoc_Data\\2024-02-19_src_project
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:cp_result.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:cell
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
    Select the plate metadata:prefix
    Select the well metadata:well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:cellRegion
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:celltype
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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