CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|/mnt/d/LGLab/Project_NMN/Raw_images_H3K27me3_IF_NMN/20251114 MEF KO H3K27me3 IF__2025-11-14T12_25_12-Measurement 2
    Name of the file:cp_dataloader.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

FilterObjects:[module_num:2|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
    Select the objects to filter:mask_cell
    Name the output objects:cell
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
ResizeObjects:[module_num:3|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enabled:False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
    Select the input object:mask_cp_masks_cell
    Name the output object:cell
    Method:Match Image
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    Select the image with the desired dimensions:ch1

MeasureImageQuality:[module_num:4|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageIntensity:[module_num:5|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
    Select images to measure:ch1
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:1,

MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:cell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:ch1
    Select objects to measure:cell

MeasureObjectIntensityDistribution:[module_num:8|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enabled:False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
    Select images to measure:ch3
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:cell
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:5
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
MeasureGranularity:[module_num:9|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enabled:False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
    Select images to measure:ch1, ch2
    Measure within objects?:Yes
    Select objects to measure:cell
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.1
    Radius of structuring element:2
    Range of the granular spectrum:3

MeasureTexture:[module_num:10|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enabled:False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
    Select images to measure:ch1
    Select objects to measure:cell
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ExportToDatabase:[module_num:11|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|D:\\Postdoc_Data\\2024-02-19_src_project
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:cp_result.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:cell
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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