CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|/media/hao/Data/Others/2025-03-18_FP_cx5461
    Name of the file:cp_dataloader.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

ImageMath:[module_num:2|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:ch1
    Multiply the first image by:0.3
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    Image or measurement?:Image
    Select the second image:ch2
    Multiply the second image by:0.3
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    Image or measurement?:Image
    Select the third image:ch3
    Multiply the third image by:0.4
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
Morph:[module_num:3|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enabled:False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
    Select the input image:ch1
    Name the output image:MorphBlue
    Select the operation to perform:branchpoints
    Number of times to repeat operation:Once
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
Threshold:[module_num:4|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
    Select the input image:ImageAfterMath
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:2
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    Manual threshold:0.025
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
Closing:[module_num:5|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enabled:False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
    Name the output image:Closing
    Structuring element:Disk,1

FillObjects:[module_num:6|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enabled:False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
    Name the output object:FillObjects
    Minimum hole size:64.0
    Planewise fill:No
    Filling method:Holes

RemoveHoles:[module_num:7|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
    Select the input image:Threshold
    Name the output image:RemoveHoles
    Size of holes to fill:10

Opening:[module_num:8|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
    Select the input image:RemoveHoles
    Name the output image:Opening
    Structuring element:disk,3

ConvertImageToObjects:[module_num:9|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
    Select the input image:Opening
    Name the output object:ConvertImageObjects
    Convert to boolean image:Yes
    Preserve original labels:Yes
    Background label:0
    Connectivity:2

ExpandOrShrinkObjects:[module_num:10|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enabled:False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
    Select the input objects:ConvertImageObjects
    Name the output objects:ShrunkenNuclei
    Select the operation:Remove spurs
    Number of pixels by which to expand or shrink:2
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
EditObjectsManually:[module_num:11|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enabled:False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
    Name the edited objects:EditedObjects
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
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    Allow overlapping objects?:No

DilateObjects:[module_num:12|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enabled:False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
    Name the output object:DilateObjects
    Structuring element:Disk,1

ErodeObjects:[module_num:13|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enabled:False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
    Name the output object:ErodeObjects
    Structuring element:Disk,1
    Prevent object removal:Yes
    Relabel resulting objects:No

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:ConvertImageObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:15|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
    Select the objects to filter:ConvertImageObjects
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:15
    Filter using a maximum measurement value?:No
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
SplitOrMergeObjects:[module_num:16|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
    Select the input objects:FilterObjects
    Name the new objects:cellRegion
    Operation:Merge
    Maximum distance within which to merge objects:2048
    Merge using a grayscale image?:No
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    Merging method:Distance
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
MeasureImageQuality:[module_num:17|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageIntensity:[module_num:18|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
    Select images to measure:ch1, ch2, ch3
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:1,

MeasureObjectSizeShape:[module_num:19|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
    Select object sets to measure:cellRegion
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:20|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
    Select images to measure:ch1, ch2, ch3
    Select objects to measure:cellRegion

MeasureGranularity:[module_num:21|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enabled:False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
    Select images to measure:ch1
    Measure within objects?:Yes
    Select objects to measure:cellRegion
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.1
    Radius of structuring element:5
    Range of the granular spectrum:5

MeasureTexture:[module_num:22|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enabled:False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
    Select images to measure:ch1
    Select objects to measure:cellRegion
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ExportToSpreadsheet:[module_num:23|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:24|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|/media/hao/Data/Others/2024-11-27_cloudy_sensor_WJ
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:cp_result.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:cellRegion
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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