CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|/media/hao/Data/Project_condensate_reporter/2024-05-28_Beas2b-v1v3_GRB2-mIFP-60X_LJY
    Name of the file:cp_dataloader.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

Threshold:[module_num:2|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
    Select the input image:ch1
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:2
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    Manual threshold:0.006
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
RemoveHoles:[module_num:3|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
    Select the input image:Threshold
    Name the output image:RemoveHoles
    Size of holes to fill:30

Opening:[module_num:4|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
    Select the input image:RemoveHoles
    Name the output image:Opening
    Structuring element:disk,2

ConvertImageToObjects:[module_num:5|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
    Select the input image:Opening
    Name the output object:ConvertImageObjects
    Convert to boolean image:Yes
    Preserve original labels:Yes
    Background label:0
    Connectivity:2

MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:ConvertImageObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:7|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
    Select the objects to filter:ConvertImageObjects
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_EquivalentDiameter
    Filter using a minimum measurement value?:Yes
    Minimum value:20
    Filter using a maximum measurement value?:No
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
SplitOrMergeObjects:[module_num:8|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
    Select the input objects:FilterObjects
    Name the new objects:cellRegion
    Operation:Merge
    Maximum distance within which to merge objects:2048
    Merge using a grayscale image?:No
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    Merging method:Distance
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:ch1_Probabilities
    Name the primary objects to be identified:spot
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
    Suppress local maxima that are closer than this minimum allowed distance:7.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.4,1.0
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    Size of adaptive window:50
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    Thresholding method:Sauvola

ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:spot
    Name the output objects:spot_l
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:8
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
ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:spot
    Name the output objects:spot_s
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:4
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
IdentifyTertiaryObjects:[module_num:12|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
    Select the larger identified objects:spot_l
    Select the smaller identified objects:spot_s
    Name the tertiary objects to be identified:spot_rbg
    Shrink smaller object prior to subtraction?:No

MeasureImageIntensity:[module_num:13|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
    Select images to measure:ch1, ch2, ch3
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:1,

MeasureObjectSizeShape:[module_num:14|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
    Select object sets to measure:cellRegion, spot
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:15|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
    Select images to measure:ch1, ch2, ch3
    Select objects to measure:cellRegion, spot, spot_rbg

MeasureGranularity:[module_num:16|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enabled:False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
    Select images to measure:ch1
    Measure within objects?:Yes
    Select objects to measure:cellRegion
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.1
    Radius of structuring element:10
    Range of the granular spectrum:4

MeasureTexture:[module_num:17|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enabled:False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
    Select images to measure:ch1
    Select objects to measure:cellRegion
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ExportToSpreadsheet:[module_num:18|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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
RelateObjects:[module_num:19|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
    Parent objects:cellRegion
    Child objects:spot
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ExportToDatabase:[module_num:20|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|D:\\Postdoc_Data\\Project_dRTK\\2024-02-29_dRTK_GRB2SH2_SHC1_293T_by_ZQ
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:cp_result.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:cellRegion,spot_rbg
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:No
    Overwrite without warning?:Data and schema
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    Create a CellProfiler Analyst workspace file?:No
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