CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|/media/hao/Data1/compound_screen/2024-06-12_SURF-AR-FOXO1_84-cmpd_validate
    Name of the file:cp_dataloader.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

Threshold:[module_num:2|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enabled:False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
    Select the input image:ch2
    Name the output image:Threshold
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:2
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    Manual threshold:0.04
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
IdentifyPrimaryObjects:[module_num:3|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
    Select the input image:ch2
    Name the primary objects to be identified:cell
    Typical diameter of objects, in pixel units (Min,Max):8,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:2
    Suppress local maxima that are closer than this minimum allowed distance:5
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:0.95
    Lower and upper bounds on threshold:0.025,1.0
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    Size of adaptive window:100
    Lower outlier fraction:0.005
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

Morph:[module_num:4|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enabled:False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
    Select the input image:ch1
    Name the output image:MorphBlue
    Select the operation to perform:branchpoints
    Number of times to repeat operation:Once
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
MeasureImageQuality:[module_num:5|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureObjectSizeShape:[module_num:6|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
    Select object sets to measure:cell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageIntensity:[module_num:7|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
    Select images to measure:ch1, ch2
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:1,

MeasureObjectIntensity:[module_num:8|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
    Select images to measure:ch1, ch2
    Select objects to measure:cell

MeasureObjectIntensityDistribution:[module_num:9|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enabled:False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
    Select images to measure:ch1
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:cell
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureGranularity:[module_num:10|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enabled:False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
    Select images to measure:ch1
    Measure within objects?:Yes
    Select objects to measure:cell
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.1
    Radius of structuring element:10
    Range of the granular spectrum:6

MeasureTexture:[module_num:11|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enabled:False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
    Select images to measure:ch1
    Select objects to measure:cell
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ExportToDatabase:[module_num:12|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|Desktop
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:cp_result.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:cell
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Select the plate type:384
    Select the plate metadata:prefix
    Select the well metadata:well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:cellRegion
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Data and schema
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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