CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:25
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|/media/hao/Data/Others/2024-12-12_dALK_mEGFP-HTs_Jinyu/20x
    Name of the file:cp_dataloader.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

FilterObjects:[module_num:2|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
    Select the objects to filter:mask_cp_masks_cell
    Name the output objects:cell
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
FilterObjects:[module_num:3|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enabled:False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
    Select the objects to filter:mask_cp_masks_nuclei
    Name the output objects:nuclei
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
MaskObjects:[module_num:4|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
    Select objects to be masked:mask_cp_masks_nuclei
    Name the masked objects:nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:cell
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.75
    Numbering of resulting objects:Renumber
    Invert the mask?:No

ResizeObjects:[module_num:5|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enabled:False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
    Select the input object:MaskedNuclei
    Name the output object:ResizeObjects
    Method:Factor
    X Factor:0.25
    Y Factor:0.25
    Z Factor:0.25
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
ExpandOrShrinkObjects:[module_num:6|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enabled:False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
    Select the input objects:MaskedNuclei
    Name the output objects:nuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:No
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:cell
    Select the smaller identified objects:nuclei
    Name the tertiary objects to be identified:cyto
    Shrink smaller object prior to subtraction?:No

ResizeObjects:[module_num:8|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enabled:False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
    Select the input object:mask_cp_masks_cell
    Name the output object:cell
    Method:Match Image
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    Select the image with the desired dimensions:ch1

MeasureImageQuality:[module_num:9|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enabled:False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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
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    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Calculate saturation metrics?:No
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
MeasureImageIntensity:[module_num:10|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
    Select images to measure:ch1, ch2, ch3
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:1,

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:cell, cyto, nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:ch1, ch2, ch3
    Select objects to measure:cell, cyto, nuclei

RelateObjects:[module_num:13|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
    Parent objects:cell
    Child objects:nuclei
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:14|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enabled:False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
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
MeasureObjectOverlap:[module_num:15|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enabled:False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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:cell
    Select the objects to be tested for overlap against the ground truth:nuclei
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureImageOverlap:[module_num:16|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enabled:False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
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

FilterObjects:[module_num:17|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enabled:False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
    Select the objects to filter:cell
    Name the output objects:FilterObjects
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:0.0
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
RelateObjects:[module_num:18|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enabled:False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
    Parent objects:cell
    Child objects:cyto
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
CalculateMath:[module_num:19|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enabled:False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
    Name the output measurement:IntergratedIntensity_cytoRationuclei_ch2
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:cyto
    Select the numerator measurement:Intensity_IntegratedIntensity_ch2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:nuclei
    Select the denominator measurement:Intensity_IntegratedIntensity_ch2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MeasureColocalization:[module_num:20|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enabled:False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
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

CalculateMath:[module_num:21|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enabled:False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
    Name the output measurement:MeanIntensity_cytoRationuclei_ch2
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:cyto
    Select the numerator measurement:Intensity_MeanIntensity_ch2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:nuclei
    Select the denominator measurement:Intensity_MeanIntensity_ch2
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
MeasureObjectIntensityDistribution:[module_num:22|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enabled:False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
    Select images to measure:ch3
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:cell
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:5
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
MeasureGranularity:[module_num:23|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
    Select images to measure:ch1
    Measure within objects?:Yes
    Select objects to measure:cell
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.1
    Radius of structuring element:5
    Range of the granular spectrum:3

MeasureTexture:[module_num:24|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enabled:False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
    Select images to measure:ch1
    Select objects to measure:cell
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

ExportToDatabase:[module_num:25|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Elsewhere...|/media/hao/Data/Others/2024-12-12_dALK_mEGFP-HTs_Jinyu/20x
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:cp_result.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:cell,cyto,nuclei
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:No
    Overwrite without warning?:Data and schema
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    Create a CellProfiler Analyst workspace file?:No
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