CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|D:\Postdoc_Data\Project_dRTK\2024-02-29_dRTK_GRB2SH2_SHC1_293T_by_ZQ
    Name of the file:cp_dataloader.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

MeasureImageIntensity:[module_num:2|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
    Select images to measure:ch1, ch2, ch3
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:1,5,95,99

MeasureGranularity:[module_num:3|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enabled:False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
    Select images to measure:ch1
    Measure within objects?:Yes
    Select objects to measure:cell
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.1
    Radius of structuring element:15
    Range of the granular spectrum:6

MeasureTexture:[module_num:4|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enabled:False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
    Select images to measure:ch1
    Select objects to measure:cell
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:4

ExportToSpreadsheet:[module_num:5|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|D:\\Postdoc_Data\\2023-11-08_SPARK_spot_intensity_LJY
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:spark|Intensity_UpperQuartileIntensity_ch4,spark|Intensity_UpperQuartileIntensity_ch3,spark|Intensity_UpperQuartileIntensity_ch1,spark|Intensity_UpperQuartileIntensity_ch2,spark|Intensity_IntegratedIntensityEdge_ch3,spark|Intensity_IntegratedIntensityEdge_ch2,spark|Intensity_IntegratedIntensityEdge_ch1,spark|Intensity_IntegratedIntensityEdge_ch4,spark|Intensity_StdIntensity_ch4,spark|Intensity_StdIntensity_ch2,spark|Intensity_StdIntensity_ch3,spark|Intensity_StdIntensity_ch1,spark|Intensity_MADIntensity_ch1,spark|Intensity_MADIntensity_ch2,spark|Intensity_MADIntensity_ch3,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cp_result_
    Overwrite existing files without warning?:No
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
ExportToDatabase:[module_num:6|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Elsewhere...|D:\\Postdoc_Data\\Project_dRTK\\2024-02-29_dRTK_GRB2SH2_SHC1_293T_by_ZQ
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:cp_result.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:No
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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