CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|/media/hao/Data/Project_condensate_reporter/2024-07-31-Beas2b-SHC1-V1/our_confocoal
    Name of the file:cp_dataloader.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

FilterObjects:[module_num:2|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enabled:False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
    Select the objects to filter:mask_cp_masks_cell
    Name the output objects:cell
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
ResizeObjects:[module_num:3|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enabled:False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
    Select the input object:mask_cp_masks_cell
    Name the output object:cell
    Method:Match Image
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    Select the image with the desired dimensions:ch1

IdentifyPrimaryObjects:[module_num:4|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
    Select the input image:ch1_Probabilities
    Name the primary objects to be identified:spot
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:6
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.4,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
ExpandOrShrinkObjects:[module_num:5|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
    Select the input objects:spot
    Name the output objects:spot_l
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:7
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
ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:spot
    Name the output objects:spot_s
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
IdentifyTertiaryObjects:[module_num:7|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
    Select the larger identified objects:spot_l
    Select the smaller identified objects:spot_s
    Name the tertiary objects to be identified:spot_rbg
    Shrink smaller object prior to subtraction?:No

MeasureImageIntensity:[module_num:8|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
    Select images to measure:ch1, ch2, ch3
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:1,

MeasureObjectSizeShape:[module_num:9|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
    Select object sets to measure:spot
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:10|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
    Select images to measure:ch1, ch2, ch3
    Select objects to measure:spot, spot_rbg

MeasureObjectIntensityDistribution:[module_num:11|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enabled:False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
    Select images to measure:ch3
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:cell
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:5
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
MeasureGranularity:[module_num:12|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enabled:False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
    Select images to measure:ch1
    Measure within objects?:Yes
    Select objects to measure:cell
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.1
    Radius of structuring element:4
    Range of the granular spectrum:3

MeasureTexture:[module_num:13|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enabled:False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
    Select images to measure:ch1
    Select objects to measure:cell
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

MeasureObjectNeighbors:[module_num:14|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enabled:False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
    Select objects to measure:spot
    Select neighboring objects to measure:spot
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
RelateObjects:[module_num:15|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enabled:False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
    Parent objects:cell
    Child objects:spot
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
ExportToDatabase:[module_num:16|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Input Folder sub-folder|/media/hao/Data/Project_condensate_reporter/2024-07-31-Beas2b-SHC1-V1/our_confocoal
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:cp_result.db
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:spot,spot_rbg
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:No
    Overwrite without warning?:Data and schema
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    Create a CellProfiler Analyst workspace file?:No
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